PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = VAWM
  keyboardBackend = PsychToolbox
  runMode = 0
  srEnableInterfaceWithoutConnection = False
  srFileSampleFiltering = FILTER_LEVEL_OFF
  srLiveSampleFiltering = FILTER_LEVEL_OFF
  srModelName = EYELINK 1000 DESKTOP
  srNativeDataFileName = et_data
  srNetIP4Address = 100.1.1.1
  srSamplingRate = 250
  srSimulationMode = False
  srTrackEyes = RIGHT_EYE
  srVOGPupilCenterAlgorithm = ELLIPSE_FIT
  srVOGPupilMeasureTypes = PUPIL_AREA
  srVOGTrackingMode = PUPIL_CR_TRACKING
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Routines
  Routine trial
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  Routine studyindtruc
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  Routine study_stage
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    CodeComponent StudyCode
      Code Type = Auto->JS
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      Before Experiment:
        import numpy as np
        import random
        import warnings
        from skimage import color as skcolor

        warnings.filterwarnings('ignore')

        # ------------------------------------------------------------
        # Color category hue ranges (CIELAB H angle in degrees)
        # ------------------------------------------------------------

        CATEGORIES = {
            'red':    (330, 390),
            'orange': (30,  75),
            'yellow': (75,  105),
            'green':  (105, 180),
            'blue':   (180, 270),
            'purple': (270, 330),
        }

        # ------------------------------------------------------------
        # Helper functions
        # ------------------------------------------------------------

        def delta_e(c1, c2):
            return float(np.sqrt(np.sum((np.array(c1) - np.array(c2)) ** 2)))

        def is_in_gamut(L, a, b):
            rgb = skcolor.lab2rgb(np.array([[[L, a, b]]]))[0][0]
            return bool(np.all(rgb >= 0) and np.all(rgb <= 1))

        def is_valid_color(lab):
            L, a, b = lab
            C = np.sqrt(a**2 + b**2)
            return is_in_gamut(L, a, b) and 35 < L < 75 and C > 35

        def get_category(lab):
            L, a, b = lab
            H = np.degrees(np.arctan2(b, a)) % 360
            for name, (h_min, h_max) in CATEGORIES.items():
                h_max_wrapped = h_max % 360
                if h_min > h_max_wrapped:
                    if H >= h_min or H < h_max_wrapped:
                        return name
                else:
                    if h_min <= H < h_max_wrapped:
                        return name
            return None

        def lab_to_hex(lab):
            L, a, b = lab
            rgb = skcolor.lab2rgb(np.array([[[L, a, b]]]))[0][0]
            r, g, b_ch = [int(x * 255) for x in np.clip(rgb, 0, 1)]
            return '#{:02X}{:02X}{:02X}'.format(r, g, b_ch)

        def random_lab_in_category(category):
            h_min, h_max = CATEGORIES[category]
            for _ in range(500):
                L     = np.random.uniform(35, 75)
                C     = np.random.uniform(35, 60)
                H_deg = np.random.uniform(h_min, h_max) % 360
                H_rad = H_deg * np.pi / 180
                lab   = np.array([L, C * np.cos(H_rad), C * np.sin(H_rad)])
                if is_valid_color(lab):
                    return lab
            return None

        def find_color(target, de_min, de_max, max_tries=3000):
            for _ in range(max_tries):
                direction = np.random.randn(3)
                direction = direction / np.linalg.norm(direction)
                candidate = target + direction * np.random.uniform(de_min, de_max)
                if is_valid_color(candidate) and de_min < delta_e(target, candidate) < de_max:
                    if get_category(candidate) is not None:
                        return candidate
            return None

        # ------------------------------------------------------------
        # Generate color pool (24 entries × 6 colors each)
        # ------------------------------------------------------------

        color_pool = []
        all_targets = []
        category_names = list(CATEGORIES.keys())

        while len(color_pool) < 24:
            cat1, cat2 = np.random.choice(category_names, size=2, replace=False)

            t1 = random_lab_in_category(cat1)
            if t1 is None:
                continue

            t2 = None
            for _ in range(200):
                candidate = random_lab_in_category(cat2)
                if candidate is not None and delta_e(t1, candidate) > 25:
                    t2 = candidate
                    break
            if t2 is None:
                continue

            if any(delta_e(t1, prev) < 15 or delta_e(t2, prev) < 15 for prev in all_targets):
                continue

            h1 = find_color(t1, 15, 80)
            if h1 is None:
                continue
            l1 = find_color(t1, 2, 10)
            if l1 is None:
                continue
            h2 = find_color(t2, 15, 80)
            if h2 is None:
                continue
            l2 = find_color(t2, 2, 10)
            if l2 is None:
                continue

            color_pool.append({
                'target1': lab_to_hex(t1), 'high1': lab_to_hex(h1), 'low1': lab_to_hex(l1),
                'target2': lab_to_hex(t2), 'high2': lab_to_hex(h2), 'low2': lab_to_hex(l2),
            })
            all_targets.extend([t1, t2])
            print(f"Entry {len(color_pool):2d}/24  "
                  f"T1={lab_to_hex(t1)} H1={lab_to_hex(h1)} L1={lab_to_hex(l1)}  "
                  f"T2={lab_to_hex(t2)} H2={lab_to_hex(h2)} L2={lab_to_hex(l2)}")

        print("Color pool ready.")
      Begin Experiment:
        my_color_list = []
        my_audio_list = []
        my_posx_list = []
        my_posy_list = []
      Begin Routine:
        # --- 1. 抽 condition ---
        condition = random.choice([0, 1, 2, 3])
        fix = .3
        StimTime1 = fix

        if condition == 0:
            targetV = 1
            targetA = 1
            StimDur1 = 1
            StimTime2 = 0
            StimDur2 = 0
            StimTime3 = StimTime1 +StimDur1
            StimDur3 = 1
            StimTime4 = 0
            StimDur4 = 0
        elif condition == 1:
            targetV = 2
            targetA = 1
            StimDur1 = 1
            StimTime2 = StimTime1 +StimDur1
            StimDur2 = 1
            StimTime3 = StimTime2 +StimDur2
            StimDur3 = 1
            StimTime4 = 0
            StimDur4 = 0

        elif condition == 2:
            targetV = 2
            targetA = 2
            StimDur1 = 1
            StimTime2 = StimTime1 +StimDur1
            StimDur2 = 1
            StimTime3 = StimTime2 +StimDur2
            StimDur3 = 1
            StimTime4 = StimTime3 +StimDur3
            StimDur4 = 1

        elif condition == 3:
            targetV = 1
            targetA = 2
            StimDur1 = 1
            StimTime2 = 0
            StimDur2 = 0
            StimTime3 = StimTime1 +StimDur1
            StimDur3 = 1
            StimTime4 = StimTime3 +StimDur3
            StimDur4 = 1

        # --- 2. 從 color_pool 取顏色 ---
        entry = color_pool[study.thisN]

        color1 = entry['target1']
        opac1 = 1

        if targetV == 2:
            color2 = entry['target2']
            opac2 = 1
        else:
            color2 = entry['target2']  # 佔位，不顯示
            opac2 = 0

        # --- 3. 位置（先固定，之後改） ---
        posx1 = -0.2
        posy1 = 0.0
        posx2 = 0.2
        posy2 = 0.0

        # --- 4. 建立 probe list ---
        dfp_conditions = ['TL', 'TH', 'LT', 'LH', 'LL', 'HT', 'HL', 'HH']

        probe_list = []

        if targetV == 1:
            for dfp in dfp_conditions:
                probe_list.append({'which': 1, 'dfp': dfp})
                probe_list.append({'which': 1, 'dfp': dfp})
        else:
            for dfp in dfp_conditions:
                probe_list.append({'which': 1, 'dfp': dfp})
            for dfp in dfp_conditions:
                probe_list.append({'which': 2, 'dfp': dfp})

        random.shuffle(probe_list)
      End Routine:
        thisExp.addData('study_condition', condition)
        thisExp.addData('study_targetV', targetV)
        thisExp.addData('study_targetA', targetA)
        thisExp.addData('study_entry_index', study.thisN)
        thisExp.addData('target1', entry['target1'])
        thisExp.addData('high1', entry['high1'])
        thisExp.addData('low1', entry['low1'])
        thisExp.addData('target2', entry['target2'])
        thisExp.addData('high2', entry['high2'])
        thisExp.addData('low2', entry['low2'])
    TextComponent fix
      letterHeight = 5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fix
      text = +
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    PolygonComponent stim1
      colorSpace = hex
      fillColor [set every repeat] = $color1
      opacity [set every repeat] = opac1
      pos [set every repeat] = (0.5, 0)
      shape = rectangle
      size = (5, 5)
      startVal [time (s)] = StimTime1
      stopVal [duration (s)] = StimDur1
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    PolygonComponent stim2
      colorSpace = hex
      fillColor [set every repeat] = $color2
      opacity [set every repeat] = opac2
      pos [set every repeat] = (posx2,posy2)
      shape = rectangle
      size = (5,5)
      startVal [time (s)] = StimTime2
      stopVal [duration (s)] = StimDur2
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    SoundComponent audi1
      forceEndRoutine = False
      sound [set every repeat] = $audio1
      startVal [time (s)] = StimTime3
      stopVal [duration (s)] = stimDur3
      volume [set every repeat] = vol1
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    SoundComponent audi2
      forceEndRoutine = False
      sound [set every repeat] = $audio2
      startVal [time (s)] = StimTime4
      stopVal [duration (s)] = stimDur4
      volume [set every repeat] = vol2
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  Routine probe
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    CodeComponent ProbeCode
      Code Type = Auto->JS
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      Begin Routine:
        # --- 從 probe_list 取出這次設定 ---
        current_probe = probe_list[inner.thisN]
        which = current_probe['which']
        dfp = current_probe['dfp']

        # --- 取對應顏色 ---
        target_hex = entry[f'target{which}']
        high_hex   = entry[f'high{which}']
        low_hex    = entry[f'low{which}']

        # --- DFP 解碼：第一個字母=Visual，第二個字母=Audio ---
        v_cond = dfp[0]
        a_cond = dfp[1]

        if v_cond == 'T':
            targetCol = target_hex
        elif v_cond == 'L':
            targetCol = low_hex
        elif v_cond == 'H':
            targetCol = high_hex

        # Audio（佔位，之後換真的音檔）
        if a_cond == 'T':
            targetAud = 'A'
        elif a_cond == 'L':
            targetAud = 'A'
        elif a_cond == 'H':
            targetAud = 'A'

        # Probe 位置（先固定）
        targetX = 0.0
        targetY = 0.0
      End Routine:
        thisExp.addData('probe_index', inner.thisN)
        thisExp.addData('probe_which', which)
        thisExp.addData('probe_dfp', dfp)
        thisExp.addData('probe_v_cond', v_cond)
        thisExp.addData('probe_a_cond', a_cond)
        thisExp.addData('probe_targetCol', targetCol)
        thisExp.addData('probe_target_hex', target_hex)
        thisExp.addData('probe_high_hex', high_hex)
        thisExp.addData('probe_low_hex', low_hex)
    TextComponent Fixation
      letterHeight = 5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      text = +
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    PolygonComponent targetV
      colorSpace = hex
      fillColor [set every repeat] = $targetCol
      pos [set every repeat] = (0,0)
      shape = rectangle
      size = (5,5)
      startVal [time (s)] = .3
      stopVal [duration (s)] = .3
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    SoundComponent targetA
      forceEndRoutine = False
      sound [set every repeat] = $targetAud
      startVal [time (s)] = .3
      stopVal [duration (s)] = .3
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    CedrusButtonBoxComponent Response plugin="psychopy-cedrus"
      allowedKeys [set every repeat] = 0,1
      deviceNumber = 0
      disabled = True
      discard previous = True
      forceEndRoutine = True
      registerOn = press
      startVal [time (s)] = .6
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = False
      syncScreenRefresh = True
      useBoxTimer = False
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    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = .6
      stopVal [duration (s)] = 2
      store = first key
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Flow
  Routine trial
  Routine studyindtruc
  LoopInitiator study loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 24
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    Routine study_stage
    LoopInitiator inner loopType="TrialHandler"
      loopType = random
      nReps = 16
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      Routine probe
    LoopTerminator inner
  LoopTerminator study
